PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'participant': u'', u'session': u'001', u'group': u''}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  expName = withDan
  Screen = 1
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Routines
  Routine flanker
    ImageComponent imageStim
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      image [set every repeat] = $image
      size = (1, 1)
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    KeyboardComponent flankerkeyresponse
      correctAns = $imageCorrAns
      storeCorrect = True
      stopVal [duration (s)] = 2.0
      forceEndRoutine = True
      allowedKeys = 'f', 'j'
      startVal [time (s)] = 0.0
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  Routine pickBlock
    CodeComponent pickBlock_code
      Begin Routine:
        # If we're on the 0th repetition (in our case meaning the 1st block),
        # get the 0th item in blockSeq list we made earlier.
        block = blockSeq[blocks.thisRepN]

        # Get the conditions file for that block
        condFile = condFiles[block]
  Routine Flanker_Instructions2
    TextComponent flankerInstructions2
      color = black
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = 0.1
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      text:
        Remember

        You'll repeat if you don't get at least 80% correct

        Press 'space' when you're ready to continue
    KeyboardComponent FlankerInstructions2_keyresponse
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine SPR_Instructions2
    TextComponent SPRinstructions2
      color = black
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = .1
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      text:
        Remember that you need to respond to the questions
        at least 80% correct to continue

        Press 'space' when you're ready to continue
    KeyboardComponent SPRinstructions2_keyresponse
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine SPR_Instructions
    TextComponent SPRInstructions
      color = black
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = 0.1
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      text:
        Full Instructions for SPR

        Press 'space' to continue.
    KeyboardComponent SPRInstructions_keyresponse
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trial2
  Routine PracticeFlanker
    ImageComponent practiceFlanker
      startVal [time (s)] = 0.0
      image [set every repeat] = $practiceimage
      size = (1, 1)
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    KeyboardComponent PracticeFlankerResponse
      correctAns = $PracticeimageCorrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f', 'j'
      startVal [time (s)] = 0.0
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    CodeComponent RepeatIfNeeded_flanker
      Begin Routine:
        ''' reset the counter at the beginning of each practice loop:'''
        if practiceFlankerLoop.thisN == 0:
            number_correct = 0
      End Routine:
        ''' update the number correct:'''
        if PracticeFlankerResponse.corr:
            number_correct = number_correct + 1

        ''' if this is the final repetition, check the proportion correct.
            (am avoiding hard coding the value '12' for flexibility):'''
        if practiceFlankerLoop.thisN +1 == practiceFlankerLoop.nTotal:
            if number_correct/(practiceFlankerLoop.nTotal) >= 0.8:
                ''' terminate the outer loop so no more practice happens:'''
                RepeatFlankerIfNeeded.finished = True
  Routine rest
    TextComponent restBetweenBlocks
      color = black
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = 0.1
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      text:
        Rest, muthafucka!

        Press 'space' when you're ready to continue
    KeyboardComponent rest_keyresponse
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Routine:
        if blocks.thisN + 1 == blocks.nTotal:
            continueRoutine = False
  Routine trial
    TextComponent sentences
      color = black
      text = This should not appear
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = 0.1
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    CodeComponent sentenceMasking_code
      Begin Experiment:
        # now define a function which we can use here and later on to replace letters with '-':

        def replaceWithdash(textList, currentWordNumber):

            dashSentence = ''
            for index, word in enumerate(textList): # cycle through the words and their index numbers
                if index != currentWordNumber:
                    dashSentence = dashSentence + ' ' + '-' * len(word)# add a string of dash characters
                else:
                    dashSentence = dashSentence + ' ' + word #for current word, but space was appearing between period and final word, so put space before each word rather than after
            return dashSentence +'.' # yields the manipulated sentence

        # Creating our own clock to time how reaction times
        # based on screen flips (i.e. when the word was actually
        # shown
        wordClock = core.Clock()
      Begin Routine:
        # remove any keypresses remaining in the buffer from
        # before  this routine started:
        event.clearEvents()
        sentenceList = sentence.split()
        # this breaks your sentence's single string of characters into a list of individual
        # words, e.g. 'The quick brown fox.' becomes ['The', 'quick', 'brown', 'fox.']

        # keep track of which word we are up to:
        wordNumber = -1 # -1 as we haven't started yet

        # now at the very beginning of the trial, we need to run this function for the
        # first time. As the current word number is -1, it should make all words '-'.
        # Use the actual name of your Builder text component here:

        sentences.text = replaceWithdash(sentenceList, wordNumber)

        # DAN: reset our wordClock (it gets set to 0)
        wordClock.reset()

        # In the Builder interface, specify a "constant" value for the text content, e.g.
        # 'test', so it doesn't conflict with our code.
      Each Frame:
        keypresses = event.getKeys() # returns a list of keypresses

        if len(keypresses) > 0: # at least one key was pushed

            if 'space' in keypresses:

                thisResponseTime = t # the current time in the trial

                # DAN: Also saving the time based on our wordClock,
                # which is reset when the next word is actually shown
                rtFromFlip = wordClock.getTime()
                # Tell psychopy to call the wordClock's reset() method
                # the next time the window flips:
                win.callOnFlip(wordClock.reset)

                wordNumber = wordNumber + 1
                if wordNumber < len(sentenceList):

                    if wordNumber == 0: # need to initialise a variable:
                        timeOfLastResponse = 0

                    # save the inter response interval for this keypress,
                    # in variables called IRI_0, IRI_1, etc:
                    thisExp.addData('IRI_' + str(wordNumber), thisResponseTime - timeOfLastResponse)
                    timeOfLastResponse = thisResponseTime

                    # Saving our flip-based rt
                    thisExp.addData("IRI_FL_" + str(wordNumber), rtFromFlip)

                    # Also, since you asked, we'll save the time
                    # since the trial started. (i.e. if the 'space' is hit
                    # at second 1 and 2:
                    #   IRI_1 = 1
                    #   IRI_2 = 1
                    #   space_1 = 1
                    #   space_2 = 2
                    thisExp.addData("space_" + str(wordNumber), thisResponseTime)

                    # update the text by masking all but the current word
                    sentences.text = replaceWithdash(sentenceList, wordNumber)
                else:
                    continueRoutine = False # time to go on to the next trial

            elif 'escape' in keypresses:

                core.quit() # I think you'll need to handle quitting manually now.
  Routine CompQ
    TextComponent questTS
      color = black
      text [set every repeat] = $compQ
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = 0.1
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    TextComponent respLeftTS
      color = black
      text [set every repeat] = $compRespL
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = 0.1
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    TextComponent respRightTS
      color = black
      text [set every repeat] = $compRespR
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = 0.1
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    KeyboardComponent CompQkeyresponse
      correctAns = $compRespCorr
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f', 'j'
      startVal [time (s)] = 0.0
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  Routine Flanker_Instructions
    TextComponent FlankerInstructions
      color = black
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = 0.1
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      text:
        Full flanker instructions

        Press 'space' to continue.
    KeyboardComponent FlankerInstructions_keyresponse
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Goodbye
    TextComponent EndText
      color = black
      text = Goodbye
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = 0.1
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  Routine setupExp
    CodeComponent SetUpExp_code
      Begin Experiment:
        group = expInfo["group"]

        # A dictionary, where the key is a block name,
        # and the value is the name of the spreadsheet
        # containing the trials for that block
        condFiles = {
            "A": "A.csv",
            "B": "B.csv",
            }

        # Key is group (a string "1", "2", etc.)
        # Value is a list containing the blocks in the desired
        #   order for the group.
        blockSequences = {
            "1": ["A", "B"], # Group 1 will see A first, then B.
            "2": ["B", "A"],
            }

        # Make sure "group" entered in the gui dialog is one that
        # we want
        assert group in blockSequences, "Invalid group entered"

        # Set the block sequence for this participant's group.
        blockSeq = blockSequences[group]
  Routine fixation
    TextComponent fixation_cross
      color = black
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = 0.1
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  Routine PracticeSentences
    TextComponent practiceSentences
      color = black
      text = This should not appear
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = 0.1
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    CodeComponent SPRmasking_code_practice
      Begin Experiment:
        # now define a function which we can use here and later on to replace letters with '-':

        def replaceWithdash(textList, currentWordNumber):

            dashSentence = ''
            for index, word in enumerate(textList): # cycle through the words and their index numbers
                if index != currentWordNumber:
                    dashSentence = dashSentence + ' ' + '-' * len(word)# add a string of dash characters
                else:
                    dashSentence = dashSentence + ' ' + word #for current word, but space was appearing between period and final word, so put space before each word rather than after
            return dashSentence +'.' # yields the manipulated sentence

        # Creating our own clock to time how reaction times
        # based on screen flips (i.e. when the word was actually
        # shown
        wordClock = core.Clock()
      Begin Routine:
        # remove any keypresses remaining in the buffer from
        # before  this routine started:
        event.clearEvents()
        practiceSentenceList = practiceSentence.split()
        # this breaks your sentence's single string of characters into a list of individual
        # words, e.g. 'The quick brown fox.' becomes ['The', 'quick', 'brown', 'fox.']

        # keep track of which word we are up to:
        wordNumber = -1 # -1 as we haven't started yet

        # now at the very beginning of the trial, we need to run this function for the
        # first time. As the current word number is -1, it should make all words '-'.
        # Use the actual name of your Builder text component here:

        practiceSentences.text = replaceWithdash(practiceSentenceList, wordNumber)

        # DAN: reset our wordClock (it gets set to 0)
        wordClock.reset()

        # In the Builder interface, specify a "constant" value for the text content, e.g.
        # 'test', so it doesn't conflict with our code.
      Each Frame:
        keypresses = event.getKeys() # returns a list of keypresses

        if len(keypresses) > 0: # at least one key was pushed

            if 'space' in keypresses:

                thisResponseTime = t # the current time in the trial

                # DAN: Also saving the time based on our wordClock,
                # which is reset when the next word is actually shown
                rtFromFlip = wordClock.getTime()
                # Tell psychopy to call the wordClock's reset() method
                # the next time the window flips:
                win.callOnFlip(wordClock.reset)

                wordNumber = wordNumber + 1
                if wordNumber < len(practiceSentenceList):

                    if wordNumber == 0: # need to initialise a variable:
                        timeOfLastResponse = 0

                    # save the inter response interval for this keypress,
                    # in variables called IRI_0, IRI_1, etc:
                    thisExp.addData('IRI_' + str(wordNumber), thisResponseTime - timeOfLastResponse)
                    timeOfLastResponse = thisResponseTime

                    # Saving our flip-based rt
                    thisExp.addData("IRI_FL_" + str(wordNumber), rtFromFlip)

                    # Also, since you asked, we'll save the time
                    # since the trial started. (i.e. if the 'space' is hit
                    # at second 1 and 2:
                    #   IRI_1 = 1
                    #   IRI_2 = 1
                    #   space_1 = 1
                    #   space_2 = 2
                    thisExp.addData("space_" + str(wordNumber), thisResponseTime)

                    # update the text by masking all but the current word
                    practiceSentences.text = replaceWithdash(practiceSentenceList, wordNumber)
                else:
                    continueRoutine = False # time to go on to the next trial

            elif 'escape' in keypresses:

                core.quit() # I think you'll need to handle quitting manually now.
  Routine practiceSentenceCompQ
    TextComponent practiceCompQ
      color = black
      text [set every repeat] = $practiceSentenceCompQ
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = 0.1
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    TextComponent practiceCompRespLeft
      color = black
      text [set every repeat] = $compRespL
      pos = (-.5, -.5)
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = 0.1
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    TextComponent practiceCompRespRight
      color = black
      text [set every repeat] = $compRespR
      pos = (.5, -.5)
      startVal [time (s)] = 0.0
      font = courier
      letterHeight = 0.1
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    KeyboardComponent key_resp_practiceCompQ
      correctAns = $compRespCorr
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f', 'j'
      startVal [time (s)] = 0.0
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    CodeComponent RepeatIfNeeded_SPR
      Begin Routine:
        ''' reset the counter at the beginning of each practice loop:'''
        if practiceSentenceLoop.thisN == 0:
            number_correct = 0
      End Routine:
        ''' update the number correct:'''
        if key_resp_practiceCompQ.corr:
            number_correct = number_correct + 1

        ''' if this is the final repetition, check the proportion correct.
            (am avoiding hard coding the value '12' for flexibility):'''
        if practiceSentenceLoop.thisN + 1 == practiceSentenceLoop.nTotal:
            if number_correct/(practiceSentenceLoop.nTotal) >= 0.8:
                ''' terminate the outer loop so no more practice happens:'''
                RepeatPracticeSentencesIfNeeded.finished = True
  Routine Combined_Instructions
    TextComponent Instructions_Combined
      color = black
      startVal [time (s)] = 0.0
      font = Courier
      letterHeight = 0.1
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      text:
        Now you'll do both SPR and flanker

        Press 'space' to continue.
    KeyboardComponent combinedInstructions_keyresponse
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine Flanker_Instructions
  LoopInitiator RepeatFlankerIfNeeded loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine Flanker_Instructions2
    LoopInitiator practiceFlankerLoop loopType="TrialHandler"
      conditionsFile = Practice.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([(u'practiceimage', u'congruent_left'), (u'imageCorrAns', u'f'), (u'congruent', 1), (u'sentence', u"Practice one what's up"), (u'compQ', u'Did you understand?'), (u'compRespL', u'Yes'), (u'compRespR', u'No'), (u'compRespCorr', u'f'), (u'block', u'practice')]),
        OrderedDict([(u'practiceimage', u'congruent_right'), (u'imageCorrAns', u'j'), (u'congruent', 1), (u'sentence', u'Practice two this is practice'), (u'compQ', u'Did you understand?'), (u'compRespL', u'No'), (u'compRespR', u'Yes'), (u'compRespCorr', u'j'), (u'block', u'practice')]),
        OrderedDict([(u'practiceimage', u'incongruent_left'), (u'imageCorrAns', u'f'), (u'congruent', 0), (u'sentence', u'How is practice going?'), (u'compQ', u'Did you understand?'), (u'compRespL', u'Yes'), (u'compRespR', u'No'), (u'compRespCorr', u'f'), (u'block', u'practice')]),
        OrderedDict([(u'practiceimage', u'incongruent_right'), (u'imageCorrAns', u'j'), (u'congruent', 0), (u'sentence', u'All good with the practice?'), (u'compQ', u'Did you understand?'), (u'compRespL', u'Yes'), (u'compRespR', u'No'), (u'compRespCorr', u'f'), (u'block', u'practice')]),
        OrderedDict([(u'practiceimage', u'single_left'), (u'imageCorrAns', u'f'), (u'congruent', 0), (u'sentence', u"Let's see how practice goes"), (u'compQ', u'Did you understand?'), (u'compRespL', u'Yes'), (u'compRespR', u'No'), (u'compRespCorr', u'f'), (u'block', u'practice')])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
      Routine fixation
      Routine PracticeFlanker
    LoopTerminator practiceFlankerLoop
  LoopTerminator RepeatFlankerIfNeeded
  Routine SPR_Instructions
  LoopInitiator RepeatPracticeSentencesIfNeeded loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine SPR_Instructions2
    LoopInitiator practiceSentenceLoop loopType="TrialHandler"
      conditionsFile = Practice.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([(u'practiceimage', u'congruent_left'), (u'PracticeimageCorrAns', u'f'), (u'congruent', 1), (u'practiceSentence', u"Practice one what's up"), (u'compQ', u'Did you understand?'), (u'compRespL', u'Yes'), (u'compRespR', u'No'), (u'compRespCorr', u'f'), (u'block', u'practice')]),
        OrderedDict([(u'practiceimage', u'congruent_right'), (u'PracticeimageCorrAns', u'j'), (u'congruent', 1), (u'practiceSentence', u'Practice two this is practice'), (u'compQ', u'Did you understand?'), (u'compRespL', u'No'), (u'compRespR', u'Yes'), (u'compRespCorr', u'j'), (u'block', u'practice')]),
        OrderedDict([(u'practiceimage', u'incongruent_left'), (u'PracticeimageCorrAns', u'f'), (u'congruent', 0), (u'practiceSentence', u'How is practice going?'), (u'compQ', u'Did you understand?'), (u'compRespL', u'Yes'), (u'compRespR', u'No'), (u'compRespCorr', u'f'), (u'block', u'practice')]),
        OrderedDict([(u'practiceimage', u'incongruent_right'), (u'PracticeimageCorrAns', u'j'), (u'congruent', 0), (u'practiceSentence', u'All good with the practice?'), (u'compQ', u'Did you understand?'), (u'compRespL', u'Yes'), (u'compRespR', u'No'), (u'compRespCorr', u'f'), (u'block', u'practice')]),
        OrderedDict([(u'practiceimage', u'single_left'), (u'PracticeimageCorrAns', u'f'), (u'congruent', 0), (u'practiceSentence', u"Let's see how practice goes"), (u'compQ', u'Did you understand?'), (u'compRespL', u'Yes'), (u'compRespR', u'No'), (u'compRespCorr', u'f'), (u'block', u'practice')])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
      Routine PracticeSentences
      Routine practiceSentenceCompQ
    LoopTerminator practiceSentenceLoop
  LoopTerminator RepeatPracticeSentencesIfNeeded
  Routine setupExp
  Routine Combined_Instructions
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = $len(condFiles)
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    Routine pickBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condFile
      loopType = random
      nReps = 1
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      Routine fixation
      Routine flanker
      Routine fixation
      Routine trial
      Routine CompQ
    LoopTerminator trials
    Routine rest
  LoopTerminator blocks
  Routine Goodbye
